<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:eph="clr-namespace:Bonsai.Ephys;assembly=Bonsai.Ephys"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="eph:Rhd2000EvalBoard">
          <eph:BitFileName>rhd2000_usb3.bit</eph:BitFileName>
          <eph:SampleRate>SampleRate1000Hz</eph:SampleRate>
          <eph:ExternalFastSettleEnabled>false</eph:ExternalFastSettleEnabled>
          <eph:LowerBandwidth>1</eph:LowerBandwidth>
          <eph:UpperBandwidth>2000</eph:UpperBandwidth>
          <eph:DspCutoffFrequency>1</eph:DspCutoffFrequency>
          <eph:DspEnabled>false</eph:DspEnabled>
          <eph:CableDelayA xsi:nil="true" />
          <eph:CableDelayB xsi:nil="true" />
          <eph:CableDelayC xsi:nil="true" />
          <eph:CableDelayD xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AmplifierData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>0</dsp:int>
            <dsp:int>1</dsp:int>
            <dsp:int>2</dsp:int>
            <dsp:int>3</dsp:int>
            <dsp:int>4</dsp:int>
            <dsp:int>5</dsp:int>
            <dsp:int>6</dsp:int>
            <dsp:int>7</dsp:int>
            <dsp:int>8</dsp:int>
            <dsp:int>9</dsp:int>
            <dsp:int>10</dsp:int>
            <dsp:int>11</dsp:int>
            <dsp:int>12</dsp:int>
            <dsp:int>13</dsp:int>
            <dsp:int>14</dsp:int>
            <dsp:int>15</dsp:int>
            <dsp:int>16</dsp:int>
            <dsp:int>17</dsp:int>
            <dsp:int>18</dsp:int>
            <dsp:int>19</dsp:int>
            <dsp:int>20</dsp:int>
            <dsp:int>21</dsp:int>
            <dsp:int>22</dsp:int>
            <dsp:int>23</dsp:int>
            <dsp:int>24</dsp:int>
            <dsp:int>25</dsp:int>
            <dsp:int>26</dsp:int>
            <dsp:int>27</dsp:int>
            <dsp:int>28</dsp:int>
            <dsp:int>29</dsp:int>
            <dsp:int>30</dsp:int>
            <dsp:int>31</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>17</dsp:int>
            <dsp:int>16</dsp:int>
            <dsp:int>15</dsp:int>
            <dsp:int>14</dsp:int>
            <dsp:int>13</dsp:int>
            <dsp:int>12</dsp:int>
            <dsp:int>22</dsp:int>
            <dsp:int>8</dsp:int>
            <dsp:int>9</dsp:int>
            <dsp:int>10</dsp:int>
            <dsp:int>11</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="eph:AdcScale">
          <eph:AdcType>Electrode</eph:AdcType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>cam0_timestamp.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp.DateTime.TimeOfDay.TotalMilliseconds,Timestamp.DateTime</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>cam0_behavior_video.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>640</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Value" Selector="Index,Index,Index,Index" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ScalarBuffer">
          <dsp:Size>
            <dsp:Width>256</dsp:Width>
            <dsp:Height>1</dsp:Height>
          </dsp:Size>
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Channels>1</dsp:Channels>
          <dsp:Value>
            <dsp:Val0>146598</dsp:Val0>
            <dsp:Val1>146598</dsp:Val1>
            <dsp:Val2>146598</dsp:Val2>
            <dsp:Val3>146598</dsp:Val3>
          </dsp:Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>cam1_timestamp.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp.DateTime.TimeOfDay.TotalMilliseconds,Timestamp.DateTime</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Value" Selector="Index,Index,Index,Index" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ScalarBuffer">
          <dsp:Size>
            <dsp:Width>256</dsp:Width>
            <dsp:Height>1</dsp:Height>
          </dsp:Size>
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Channels>1</dsp:Channels>
          <dsp:Value>
            <dsp:Val0>146598</dsp:Val0>
            <dsp:Val1>146598</dsp:Val1>
            <dsp:Val2>146598</dsp:Val2>
            <dsp:Val3>146598</dsp:Val3>
          </dsp:Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>0</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>box1_eegdata</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>eeg_timestamp.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>true</io:IncludeHeader>
          <io:Selector>Timestamp.DateTime.TimeOfDay.TotalMilliseconds,Timestamp.DateTime</io:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="eph:AdcScale">
            <eph:AdcType>Electrode</eph:AdcType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:MatrixWriter">
            <dsp:Path>allchannels</dsp:Path>
            <dsp:Suffix>None</dsp:Suffix>
            <dsp:Overwrite>false</dsp:Overwrite>
            <dsp:Layout>ColumnMajor</dsp:Layout>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>32</dsp:int>
            <dsp:int>33</dsp:int>
            <dsp:int>34</dsp:int>
            <dsp:int>35</dsp:int>
            <dsp:int>36</dsp:int>
            <dsp:int>37</dsp:int>
            <dsp:int>38</dsp:int>
            <dsp:int>39</dsp:int>
            <dsp:int>40</dsp:int>
            <dsp:int>41</dsp:int>
            <dsp:int>42</dsp:int>
            <dsp:int>43</dsp:int>
            <dsp:int>44</dsp:int>
            <dsp:int>45</dsp:int>
            <dsp:int>46</dsp:int>
            <dsp:int>47</dsp:int>
            <dsp:int>48</dsp:int>
            <dsp:int>49</dsp:int>
            <dsp:int>50</dsp:int>
            <dsp:int>51</dsp:int>
            <dsp:int>52</dsp:int>
            <dsp:int>53</dsp:int>
            <dsp:int>54</dsp:int>
            <dsp:int>55</dsp:int>
            <dsp:int>56</dsp:int>
            <dsp:int>57</dsp:int>
            <dsp:int>58</dsp:int>
            <dsp:int>59</dsp:int>
            <dsp:int>60</dsp:int>
            <dsp:int>61</dsp:int>
            <dsp:int>62</dsp:int>
            <dsp:int>63</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>17</dsp:int>
            <dsp:int>16</dsp:int>
            <dsp:int>15</dsp:int>
            <dsp:int>14</dsp:int>
            <dsp:int>13</dsp:int>
            <dsp:int>12</dsp:int>
            <dsp:int>22</dsp:int>
            <dsp:int>8</dsp:int>
            <dsp:int>9</dsp:int>
            <dsp:int>10</dsp:int>
            <dsp:int>11</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="eph:AdcScale">
          <eph:AdcType>Electrode</eph:AdcType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>0</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>box2_eegdata</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>AuxiliaryData</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="eph:AdcScale">
            <eph:AdcType>AuxiliaryInput</eph:AdcType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:MatrixWriter">
            <dsp:Path>accel</dsp:Path>
            <dsp:Suffix>FileCount</dsp:Suffix>
            <dsp:Overwrite>false</dsp:Overwrite>
            <dsp:Layout>ColumnMajor</dsp:Layout>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TtlIn</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>ttl_timestamp.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp.DateTime.TimeOfDay.TotalMilliseconds,Timestamp.DateTime</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="eph:TtlState" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>ttl_in_state</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>cam1_behavior_video.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="31" Label="Source1" />
      <Edge From="0" To="34" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="25" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="21" Label="Source1" />
      <Edge From="2" To="23" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="18" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="28" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="12" To="39" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="34" To="37" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>